<CompuCell3D Revision="20190101" Version="4.2.5">
   <Metadata>
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>100</DebugOutputFrequency>
   </Metadata>
   
   <Potts>
      <Dimensions x="500" y="500" z="1"/>
      <Steps>1800</Steps>
      <Temperature>0.01</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Cell"/>
      <CellType TypeId="2" TypeName="ECMFiber"/>
   </Plugin>
   
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="Cell" LambdaVolume="1.0" TargetVolume="400"/>
      <VolumeEnergyParameters CellType="ECMFiber" LambdaVolume="1.0" TargetVolume="15"/>
   </Plugin>
   
   <Plugin Name="Surface">
      <SurfaceEnergyParameters CellType="Cell" LambdaSurface="0.5" TargetSurface="35"/>
      <SurfaceEnergyParameters CellType="ECMFiber" LambdaSurface="0.5" TargetSurface="20"/>
   </Plugin>
   
   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">35</Energy>
      <Energy Type1="Medium" Type2="Cell">32</Energy>
      <Energy Type1="Medium" Type2="ECMFiber">35</Energy>
      <Energy Type1="Cell" Type2="Cell">16</Energy>
      <Energy Type1="Cell" Type2="ECMFiber">16</Energy>
      <Energy Type1="ECMFiber" Type2="ECMFiber">5</Energy>
      <NeighborOrder>1</NeighborOrder>
   </Plugin>
   
   <Plugin Name="CenterOfMass"/>
   <Plugin Name="NeighborTracker"/>
   
   <Plugin Name="Secretion"/>
   
   <Steppable Type="DiffusionSolverFE">
      <DiffusionField Name="MMP">
         <DiffusionData>
            <FieldName>MMP</FieldName>
            <DiffusionConstant>0.1</DiffusionConstant>
            <DecayConstant>0.072</DecayConstant>
         </DiffusionData>

      </DiffusionField>
   </Steppable>
   
</CompuCell3D>
